# This example demonstrates the three different ways one can bin results by energy. Adjust the value of EBinEnergy to see the effect.
#
# IncidentTrack means we bin based on the energy of the track that was initially
# incident on the scoring volume, even though the track that finally delivers the
# scored energy is likely to be not this track but one of its resultng delta rays.
# This is the default setting.
# It is set this way because the original use of energy binning was to study how
# proton therapy dose due to various energy protons incident on the patient.
#
# PreStep means we bin based on the kinetic energy of the track at the time
# that it deposited the dose.
# This is generally used when one wants to score a spectrum.
# So, for example, if you adjust Quantity below to Fluence, then the scored
# value is what is referred to in the literature as a Spectral Fluence.
#
# DepositedInStep means we bin based on the energy that was deposited in the step.
# You can use this setting to see that almost all actual energy deposits occur
# in small amounts spread along the track.
#
# PrimaryTrack means we bin based on the energy of the primary track from which this
# track is descended.
# You can use this setting to separate the effects of different energy primaries.
# b:Ts/useQT                                   ="True" 
b:Gr/Enable = "False"


s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX      = 20.0 cm
d:Ge/Phantom/HLY      = 20.0 cm
d:Ge/Phantom/HLZ      = 10.0 cm
d:Ge/Phantom/TransZ   = -100. cm
s:Ge/Phantom/AssignToRegionNaMed = "targetregion"
s:Ge/Phantom/Color    = "Silver"
s:Ge/Phantom/DrawingStyle = "Solid" 

s:Ge/Detector/Type     = "TsCylinder"
s:Ge/Detector/Parent   = "World"
s:Ge/Detector/Material = "CsI"
d:Ge/Detector/RMin     = 0 cm
d:Ge/Detector/RMax      = 20 cm
d:Ge/Detector/HL      = 1 mm
d:Ge/Detector/TransZ   = -150. cm
i:Ge/Detector/Rbins    = 100 
i:Ge/Detector/PhiBins  = 360
i:Ge/Detector/ZBins    = 1
s:Ge/Detector/Color    = "White"
s:Ge/Detector/DrawingStyle = "Solid" 

# s:Ge/Cylinder/Type     = "TsCylinder"
# s:Ge/Cylinder/Parent   = "World"
# s:Ge/Cylinder/Material = "Vacuum"
# d:Ge/Cylinder/RMin     = 50.0 cm
# d:Ge/Cylinder/RMax     = 55.0 cm
# d:Ge/Cylinder/SPhi     = 20.0 deg
# d:Ge/Cylinder/DPhi     = 100. deg
# d:Ge/Cylinder/HL       = 50. cm
# d:Ge/Cylinder/TransX   = 0. cm
# d:Ge/Cylinder/TransY   = 0. cm
# d:Ge/Cylinder/TransZ   = -30. cm
# d:Ge/Cylinder/RotX     = 0. deg
# d:Ge/Cylinder/RotY     = 0. deg
# d:Ge/Cylinder/RotZ     = 0. deg
# s:Ge/Cylinder/Color    = "blue"
# i:Ge/Cylinder/RBins    = 2


sv:Ma/CsI/Components = 2 "Caesium" "Iodine"
uv:Ma/CsI/Fractions = 2 0.4888451 0.5111549
d:Ma/CsI/Density = 	4.51 g/cm3
s:Ma/CsI/DefaultColor= "yellow"

s:Sc/primary/Quantity                  = "EnergyDeposit"
s:Sc/primary/Component                 = "Detector"
#b:Sc/primary/OutputToConsole           = "TRUE"
s:Sc/primary/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/primary/EBins                     = 100 # defaults to 1, that is, un-binned
d:Sc/primary/EBinMin                   = .001 MeV # defaults to zero
d:Sc/primary/EBinMax                   = 0.12 MeV # must be specified if EBins is greater than 1

s:Gr/ViewA/Type                            = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"



sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
d:Ph/Default/CutForAllParticles = 0.005 mm

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "gamma"
# d:So/Example/BeamEnergy               = 100. keV
# u:So/Example/BeamEnergySpread         = 0.
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 1. mm
d:So/Example/BeamPositionCutoffY      = 1. mm
d:So/Example/BeamPositionSpreadX      = 0.01 mm
d:So/Example/BeamPositionSpreadY      = 0.01 mm
s:So/Example/BeamAngularDistribution  = "Flat"
d:So/Example/BeamAngularCutoffX       = 0.001 deg
d:So/Example/BeamAngularCutoffY       = 0.001 deg
i:So/Example/NumberOfHistoriesInRun   = 100000000
i:So/Example/NumberOfRuns             = 1
s:So/Example/BeamEnergySpectrumType = "Continuous"
dv:So/Example/BeamEnergySpectrumValues = 238 1.25 1.75 2.25 2.75 3.25 3.75 4.25 4.75 5.25 5.75 6.25 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119.75 keV 
uv:So/Example/BeamEnergySpectrumWeights = 238 0.0 0.0 0.0 0.0 9.04543306801836e-241 7.678335627911695e-165 3.24198348069267e-118 6.333096484239765e-88 2.064741085669795e-67 5.877363217311753e-53 1.6891772800624764e-42 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0.00018952783583040054
i:Ts/NumberOfThreads = -2

b:Vr/UseVarianceReduction = "True"
s:Vr/ForcedInteraction/Type   = "ForcedInteraction"
sv:Vr/ForcedInteraction/forregion/targetregion/processesNamed   = 2 "Rayl" "Compt"
dv:Vr/ForcedInteraction/ForRegion/targetregion/ForcedDistances  = 2 10 10 cm #10 cm
b:Vr/ForcedInteraction/ForRegion/targetregion/CorrectByWeight = "True"

d:Ge/BeamPosition/TransZ = 0. cm
i:Ts/ShowHistoryCountAtInterval = 100000
# b:Ts/PauseBeforeQuit = "True"
