# ------------------------------------------------------------------ #
#  Main Script for Cu-GOS Scintillator pencil beam simulation
#  XCITE Tango2
#
#  Run -> topas Ge_CuGOS.txt
#
#  File Structure
#  -- > Ma_CuGOS.txt (Contains optical materials)
#
#  Output
#  -- > PhotodiodeReadout.phsp (Contains optical photons hitting AMFPI)
#
#  CHANGE == parameter that you might want to change 
# ------------------------------------------------------------------ #

includeFile                             = Ma_CuGOS.txt

i:Ts/SequenceVerbosity                  = 1
b:Gr/Enable                           = "False"
# b:Ts/UseQt                                            = "True"                 # CHANGE

# SEQUENCE
b:Ts/ShowCPUTime                        = "True"
i:Ts/ShowHistoryCountAtInterval         = 10000
i:Ts/NumberOfThreads                    = -1

# VISUALIZATION
s:Gr/view/Type                          = "OpenGl"
i:Gr/view/WindowSizeX                   = 600
i:Gr/view/WindowSizeY                   = 600
d:Gr/view/Theta                         = 90. deg
d:Gr/view/Phi                           = 0. deg
u:Gr/view/Zoom                          = 30
s:Gr/view/CenterOn = "GOS_Glue"

# PHYSICS LIST
s:Ph/ListName                           = "Optical"
s:Ph/Optical/Type                       = "Geant4_Modular"
sv:Ph/Optical/Modules                   = 1 "g4em-penelope"
d:Ph/Optical/CutForAllParticles         = 0.05 mm 

# SOURCE (SIMPLE MONOENERGETIC)
s:So/PencilBeam/Type                                       = "Beam"
s:So/PencilBeam/Component                                  = "BeamPosition"
s:So/PencilBeam/BeamParticle                               = "gamma"
u:So/PencilBeam/BeamEnergySpread                           = 0.01
s:So/PencilBeam/BeamPositionDistribution                   = "None"
s:So/PencilBeam/BeamPositionCutoffShape                    = "Rectangle"
s:So/PencilBeam/BeamAngularDistribution                    = "None"
i:So/PencilBeam/NumberOfHistoriesInRun                     = 10000000      # CHANGE
d:So/PencilBeam/BeamEnergy = Tf/beam_energy/Value keV

d:Tf/TimelineEnd = 19. ms
i:Tf/NumberOfSequentialTimes = 18
s:Tf/beam_energy/Function = "Step"
dv:Tf/beam_energy/Times = 18 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 ms
dv:Tf/beam_energy/Values = 18 10 20 30 40 50 60 70 80 90 100 300 500 700 900 1000 2000 4000 6000 keV
s:Sc/EnergyDeposition/SplitByTimeFeature = "beam_energy"

# GEOMETRY
d:Ge/World/HLX                          = 30 cm
d:Ge/World/HLY                          = 30 cm
d:Ge/World/HLZ                          = 30 cm
s:Ge/World/Material                     = "Air"

dc:Ge/GOS_Glue/HLX                      = 15.85 cm
dc:Ge/GOS_Glue/HLY                      = 15.85 cm
sc:Ge/GOS_Glue/Material                 = "GOS_Glue"
s:Ge/GOS_Glue/Type                      = "TsBox"
sc:Ge/GOS_Glue/DrawingStyle             = "Solid"
s:Ge/GOS_Glue/Parent                    = "World"
dc:Ge/GOS_Glue/HLZ                      = 0.4 mm


# ------------------- SCORER --------------------------

# The scorer is attached to the PMT, but only those
# photons that arrives to the surface of the photocathode
# are collected (with 20% probability, see surface setup)

# s:Sc/Readout/Quantity = "OpticalPhotonCount"
# s:Sc/Readout/Component = "Photodiode_Readout"
# # s:Sc/Readout/OutputFile = "PhotodiodeSurface"
# s:Sc/Readout/OutputType = "Binary"
# i:Sc/Readout/BounceLimit = 100000000
# s:Sc/Readout/IfOutputFileAlreadyExists = "Overwrite"

# # Surface used to detect optical photons
# s:Su/SurfaceDetector/Type                = "dielectric_metal"
# s:Su/SurfaceDetector/Finish              = "polished"
# s:Su/SurfaceDetector/Model               = "unified"
# dv:Su/SurfaceDetector/Efficiency/Energies   = 2 1.6 7.2 eV
# uv:Su/SurfaceDetector/Efficiency/Values     = 2 1.0 1.0
# dv:Su/SurfaceDetector/Reflectivity/Energies = 2 1.6 4.2 eV
# uv:Su/SurfaceDetector/Reflectivity/Values   = 2 0.0 0.0

# SCORER (Energy Deposition)
s:Sc/EnergyDeposition/Component                 = "GOS_Glue"
s:Sc/EnergyDeposition/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition/OutputType                = "csv"
s:Sc/EnergyDeposition/IfOutputFileAlreadyExists = "Overwrite"

# Comment out for monoenergetic
# s:So/PencilBeam/BeamEnergySpectrumType       = "Continuous"
# dv:So/PencilBeam/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
# uv:So/PencilBeam/BeamEnergySpectrumWeights = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 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3.9852698218460666e-05




# These must be last lines three lines for bash script to replace!!
# d:So/PencilBeam/BeamEnergy = 6000 keV
# s:Sc/Readout/OutputFile = "runs/PhotodiodeSurface_keV_6000"
# i:Ge/GOS_Glue/XBins = 317
# i:Ge/GOS_Glue/YBins = 317
# i:Ge/GOS_Glue/ZBins = 1