#
# IncidentTrack means we bin based on the energy of the track that was initially
# incident on the scoring volume, even though the track that finally delivers the
# scored energy is likely to be not this track but one of its resultng delta rays.
# This is the default setting.
# It is set this way because the original use of energy binning was to study how
# proton therapy dose due to various energy protons incident on the patient.
#
# PreStep means we bin based on the kinetic energy of the track at the time
# that it deposited the dose.
# This is generally used when one wants to score a spectrum.
# So, for example, if you adjust Quantity below to Fluence, then the scored
# value is what is referred to in the literature as a Spectral Fluence.
#
# DepositedInStep means we bin based on the energy that was deposited in the step.
# You can use this setting to see that almost all actual energy deposits occur
# in small amounts spread along the track.
#
# PrimaryTrack means we bin based on the energy of the primary track from which this
# track is descended.
# You can use this setting to separate the effects of different energy primaries.
# Ts/UseQt = "True"

# s:Gr/view/Type        = "OpenGl"
# b:Gr/view/IncludeAxes = "True"
# d:Gr/view/AxesSize    = 1 cm
# d:Gr/view/Theta       = 45 deg
# d:Gr/view/Phi         = 45 deg
# u:Gr/view/Zoom        = 1.8

s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "CsI"
d:Ge/Phantom/HLX      = 20.0 cm
d:Ge/Phantom/HLY      = 20.0 cm
d:Ge/Phantom/HLZ      = 1 cm
d:Ge/Phantom/TransZ   = -30. cm

b:Ma/CsI/EnableOpticalProperties = "True"
sv:Ma/CsI/Components = 2 "Caesium" "Iodine"
uv:Ma/CsI/Fractions = 2 0.488451 0.511549
d:Ma/CsI/Density = 3.157 g/cm3
s:Ma/CsI/DefaultColor= "fuchsia"

s:Sc/Case1BinnedByIncidentTrackEnergy/Quantity                  = "EnergyDeposit"
s:Sc/Case1BinnedByIncidentTrackEnergy/Component                 = "Phantom"
b:Sc/Case1BinnedByIncidentTrackEnergy/OutputToConsole           = "TRUE"
s:Sc/Case1BinnedByIncidentTrackEnergy/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Case1BinnedByIncidentTrackEnergy/SplitByTimeFeature        = "rotationX"
# sc:Sc/Case1BinnedByIncidentTrackEnergy/EBinEnergy               = "IncidentTrack"


# i:Sc/Case1BinnedByIncidentTrackEnergy/EBins                     = 4
# d:Sc/Case1BinnedByIncidentTrackEnergy/EBinMin                   = 0. MeV
# d:Sc/Case1BinnedByIncidentTrackEnergy/EBinMax                   = 200. MeV
# sc:Sc/Case1BinnedByIncidentTrackEnergy/EBinEnergy               = "IncidentTrack"

# s:Sc/Case2BinnedByIncidentPreStepEnergy/Quantity                  = "Charge"
# s:Sc/Case2BinnedByIncidentPreStepEnergy/Component                 = "Phantom"
# b:Sc/Case2BinnedByIncidentPreStepEnergy/OutputToConsole           = "True"
# s:Sc/Case2BinnedByIncidentPreStepEnergy/IfOutputFileAlreadyExists = "Overwrite"
# s:Sc/Case2BinnedByIncidentPreStepEnergy/SplitByTimeFeature        = "rotationX"

s:Tf/rotationX/Function           = "Linear m"
d:Tf/rotationX/Rate               = -5. cm/ms
d:Tf/rotationX/StartValue         = 1. m
d:Tf/rotationX/RepetitionInterval = 250. ms

d:Tf/TimelineEnd             = 250 ms
i:Tf/NumberOfSequentialTimes = 100

# i:Sc/Case2BinnedByIncidentPreStepEnergy/EBins                     = 500
# d:Sc/Case2BinnedByIncidentPreStepEnergy/EBinMin                   = 0. keV
# d:Sc/Case2BinnedByIncidentPreStepEnergy/EBinMax                   = 100. keV
# sc:Sc/Case2BinnedByIncidentPreStepEnergy/EBinEnergy               = "PreStep"
# sv:Sc/Case2BinnedByIncidentPreStepEnergy/OnlyIncludeParticlesNamed = 1 "electron"
# sv:Sc/Case2BinnedByIncidentPreStepEnergy/OnlyIncludeIfIncidentParticlesFromProcess = 1 "eIoni"

# s:Sc/Case3BinnedByEnergyDepositedInStep/Quantity                  = "EnergyDeposit"
# s:Sc/Case3BinnedByEnergyDepositedInStep/Component                 = "Phantom"
# b:Sc/Case3BinnedByEnergyDepositedInStep/OutputToConsole           = "TRUE"
# s:Sc/Case3BinnedByEnergyDepositedInStep/IfOutputFileAlreadyExists = "Overwrite"
# i:Sc/Case3BinnedByEnergyDepositedInStep/EBins                     = 500
# d:Sc/Case3BinnedByEnergyDepositedInStep/EBinMin                   = 0. keV
# d:Sc/Case3BinnedByEnergyDepositedInStep/EBinMax                   = 100. keV
# sc:Sc/Case3BinnedByEnergyDepositedInStep/EBinEnergy               = "DepositedInStep"
# sv:Sc/Case3BinnedByEnergyDepositedInStep/OnlyIncludeIfIncidentParticlesFromProcess = 1 "eIoni"


# s:Sc/Case3BinnedByPrimaryTrackEnergy/Quantity                  = "EnergyDeposit"
# s:Sc/Case3BinnedByPrimaryTrackEnergy/Component                 = "Phantom"
# b:Sc/Case3BinnedByPrimaryTrackEnergy/OutputToConsole           = "TRUE"
# s:Sc/Case3BinnedByPrimaryTrackEnergy/IfOutputFileAlreadyExists = "Overwrite"
# i:Sc/Case3BinnedByPrimaryTrackEnergy/EBins                     = 4
# d:Sc/Case3BinnedByPrimaryTrackEnergy/EBinMin                   = 0. MeV
# d:Sc/Case3BinnedByPrimaryTrackEnergy/EBinMax                   = 200. MeV
# sc:Sc/Case3BinnedByPrimaryTrackEnergy/EBinEnergy               = "PrimaryTrack"

#s:Gr/ViewA/Type                            = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

# d:Ph/Default/CutForElectron = 10 cm

i:Ts/NumberOfThreads = 1

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "gamma"
d:So/Example/BeamEnergy               = 95. keV
u:So/Example/BeamEnergySpread         = 0.
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 1

# i:So/Example/NumberOfHistoriesInRun = Tf/BCM/Value